PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $(0.827,0.827,0.827)
  expName = CPED_even
  logging level = debug
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Routines
  Routine FixCross
    CodeComponent FixCross_JitterCode
      Code Type = Py
      Begin Experiment:
        jitter = np.arange(1, 3, .1)
        shuffle(jitter)
      Begin Routine:
        jitter = np.arange(1, 3, .1)
        shuffle(jitter)
    PolygonComponent FixCross_Image
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 0.35
      shape = cross
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
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  Routine Stim_Pres
    CodeComponent Trials_Code
      Code Type = Py
      Begin Experiment:
        thisLoop = 0
      Begin Routine:
        thisLoop +=1

        Stim_Pres_Image.contrast = Contrast
        Mask_Before_Image.contrast = Contrast
        Mask_After_Image.contrast = Contrast
    ImageComponent Stim_Pres_Image
      image [set every repeat] = $StimImageFile
      size = (0.5, 0.5)
      startVal [frame N] = 258
      stopVal [duration (frames)] = 6
      texture resolution = 512
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    ImageComponent Mask_Before_Image
      image [set every repeat] = $MaskImageFile
      size = (0.5, 0.5)
      startVal [frame N] = 240
      stopVal [duration (frames)] = 18
      texture resolution = 512
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    ImageComponent Mask_After_Image
      image [set every repeat] = $MaskImageFile
      size = (0.5, 0.5)
      startVal [frame N] = 264
      stopVal [duration (frames)] = 18
      texture resolution = 512
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    KeyboardComponent KeyResp
      allowedKeys = 'z','m'
      correctAns = $CorrResp
      forceEndRoutine = True
      startVal [frame N] = 108
      storeCorrect = True
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    PolygonComponent FixCross_Resp
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 0.35
      shape = cross
      size = (0.15, 0.15)
      startVal [frame N] = 282
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    PolygonComponent FixCross_PostCue
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 0.25
      shape = cross
      size = (0.15, 0.15)
      startVal [frame N] = 90
      stopVal [duration (frames)] = 150
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    ImageComponent Cue_Image
      image [set every repeat] = $Cue
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      texture resolution = 512
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  Routine Response
    TextComponent RespQ_ConsText
      color = black
      font = Calibri Light
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Was the face image you just saw a                      ?
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    TextComponent RespQ_ChangeText
      color [set every repeat] = $TextColour
      font = Calibri
      letterHeight = 0.05
      pos = (0.35, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $RespQ
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    KeyboardComponent RespQ_KeyResp
      allowedKeys = 'left', 'right'
      correctAns = $CorrResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent KeyResp_Left
      color = black
      font = Calibri
      letterHeight = 0.05
      pos = (-0.2, -0.05)
      startVal [time (s)] = 0.0
      text = Yes
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    TextComponent KeyResp_Right
      color = black
      font = Calibri
      letterHeight = 0.05
      pos = (0.2, -0.05)
      startVal [time (s)] = 0.0
      text = No
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  Routine Feedback
    CodeComponent Feedback_Code
      Code Type = Py
      Begin Routine:
        if KeyResp.corr == 1:
            msg="+1"
            clr="green"
        else:
            msg="0"
            clr="black"
    TextComponent Feedback_Text
      color [set every repeat] = $clr
      font = Calibri
      letterHeight = 0.3
      startVal [frame N] = 30
      stopVal [frame N] = 90
      text [set every repeat] = $msg
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  Routine Instr
    ImageComponent InstrText_Image
      image [set every repeat] = $InstrText_File
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent Instr_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Welcome
    KeyboardComponent Welc_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent Welc_Text
      color = black
      font = Songti SC
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = 欢迎进入表情识别测查!
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  Routine ThankYou
    TextComponent TY_Text
      color = black
      font = Songti SC
      letterHeight = 0.3
      startVal [frame N] = 0.0
      stopVal [time (s)] = 3
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      text:
        谢谢您！
  Routine Break
    KeyboardComponent Break_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Break_Text
      color = black
      font = Songti SC
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        如需要，请稍事休息，
        当您准备好请按空格
        键进入下一轮。
  Routine Exp_Instr
    KeyboardComponent ExpInstr_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent ExpInstr_Text
      color = black
      font = Songti SC
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        在本测查中有两种类型
        的决策，一类关于判定
        一个人脸的表情是否为
        惊恐，另一类判定一个
        人脸的表情是否为平静。
        每一轮只有其中一种决策。
  Routine ActualRun_Instr
    KeyboardComponent ActualRunInstr_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent ActualRun_text
      color = black
      font = Songti SC
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        下面我们进入正式测查。
        在正式测查中，每一轮
        会有更多的决策。
  Routine Prac_Text
    KeyboardComponent PracInstr_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent PracInstr_Text
      color = black
      font = Songti SC
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text = 下面，我们来练习一下。
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  Routine Feedback_Prac
    CodeComponent Feedback_Prac_Code
      Code Type = Py
      Begin Routine:
        if PracKeyResp.corr == 1:
            msg="+1"
            clr="green"
        else:
            msg="0"
            clr="black"
    TextComponent Feedback_Prac_Text
      color [set every repeat] = $clr
      font = Calibri
      letterHeight = 0.3
      startVal [frame N] = 30
      stopVal [frame N] = 90
      text [set every repeat] = $msg
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  Routine PracEnd_Feedback
    CodeComponent PracEnd_Feedback_Code
      Code Type = Py
      Begin Routine:
        Trials_Prac.data['PracKeyResp.corr']
        nCorr = Trials_Prac.data['PracKeyResp.corr'].sum()
        msg = "你获得了 %i 分！" %nCorr
    TextComponent PracEnd_Feedback_Text
      color = black
      font = Songti SC
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      text [set every repeat] = $msg
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  Routine Feedback_EndBlock
    CodeComponent BlockEnd_Feedback_Code
      Code Type = Py
      Begin Routine:
        Trials.data['KeyResp.corr']
        nCorr = Trials.data['KeyResp.corr'].sum()
        msg = "你获得了 %i 分!" %nCorr
    TextComponent BlockEnd_Feedback_Text
      color = black
      font = Songti SC
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      text [set every repeat] = $msg
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  Routine StimPres_Prac
    CodeComponent Practrials_Code
      Code Type = Py
      Begin Experiment:
        thisLoop_P = 0
      Begin Routine:
        thisLoop_P+=1

        PracStimPres_Images.contrast = Contrast
        PracMaskImage_Before.contrast = Contrast
        PracMaskImage_After.contrast = Contrast
    ImageComponent PracStimPres_Images
      image [set every repeat] = $StimImageFile
      size = (0.5, 0.5)
      startVal [frame N] = 258
      stopVal [duration (frames)] = 6
      texture resolution = 512
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    ImageComponent PracMaskImage_Before
      image [set every repeat] = $MaskImageFile
      size = (0.5, 0.5)
      startVal [frame N] = 240
      stopVal [duration (frames)] = 18
      texture resolution = 512
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    ImageComponent PracMaskImage_After
      image [set every repeat] = $MaskImageFile
      size = (0.5, 0.5)
      startVal [frame N] = 264
      stopVal [duration (frames)] = 18
      texture resolution = 512
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    KeyboardComponent PracKeyResp
      allowedKeys = 'z','m'
      correctAns = $CorrResp
      forceEndRoutine = True
      startVal [frame N] = 108
      storeCorrect = True
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    PolygonComponent PracFixCross_Resp
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 0.35
      shape = cross
      size = (0.15, 0.15)
      startVal [frame N] = 282
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    PolygonComponent PracFixCross_PostCue
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 0.35
      shape = cross
      size = (0.15, 0.15)
      startVal [frame N] = 90
      stopVal [duration (frames)] = 150
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    ImageComponent PracCue_Image
      image [set every repeat] = $Cue
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      texture resolution = 512
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Flow
  Routine Welcome
  Routine Exp_Instr
  Routine Prac_Text
  LoopInitiator Blocks_Prac loopType="TrialHandler"
    conditionsFile = Blocks_Prac.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('BlockN', 1), ('BlockType', 'F'), ('InstrText_File', 'Instr_F.JPG')]),
      OrderedDict([('BlockN', 2), ('BlockType', 'N'), ('InstrText_File', 'Instr_N.JPG')])]
    Routine Instr
    LoopInitiator Trials_Prac loopType="TrialHandler"
      Selected rows = $str(thisLoop_P)+":"+str(thisLoop_P+2)
      conditionsFile = Trials_StimPres_Prac.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('BlockN', 1), ('BlockType', 'F'), ('Cue', '50%'), ('Stimuli', 'F01'), ('StimImageFile', 'F01.jpg'), ('StimEmo', 1), ('CorrResp', 'left'), ('Mask', 'Mask1'), ('MaskImageFile', 'Mask1.jpg'), ('InstrText_File', 'Instr_F.JPG')]),
        OrderedDict([('BlockN', 2), ('BlockType', 'F'), ('Cue', '80%'), ('Stimuli', 'F03'), ('StimImageFile', 'F03.jpg'), ('StimEmo', 1), ('CorrResp', 'left'), ('Mask', 'Mask2'), ('MaskImageFile', 'Mask2.jpg'), ('InstrText_File', 'Instr_F.JPG')]),
        OrderedDict([('BlockN', 3), ('BlockType', 'N'), ('Cue', '50%'), ('Stimuli', 'F02'), ('StimImageFile', 'F02.jpg'), ('StimEmo', 1), ('CorrResp', 'right'), ('Mask', 'Mask3'), ('MaskImageFile', 'Mask3.jpg'), ('InstrText_File', 'Instr_N.JPG')]),
        OrderedDict([('BlockN', 4), ('BlockType', 'N'), ('Cue', '80%'), ('Stimuli', 'N04'), ('StimImageFile', 'N04.jpg'), ('StimEmo', 2), ('CorrResp', 'left'), ('Mask', 'Mask4'), ('MaskImageFile', 'Mask4.jpg'), ('InstrText_File', 'Instr_N.JPG')])]
      Routine FixCross
      Routine StimPres_Prac
      Routine Feedback_Prac
    LoopTerminator Trials_Prac
    Routine PracEnd_Feedback
  LoopTerminator Blocks_Prac
  Routine ActualRun_Instr
  LoopInitiator Blocks loopType="TrialHandler"
    conditionsFile = Blocks_even.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('BlockN', 1), ('BlockType', 'F'), ('InstrText_File', 'Instr_F.JPG')]),
      OrderedDict([('BlockN', 2), ('BlockType', 'N'), ('InstrText_File', 'Instr_N.JPG')]),
      OrderedDict([('BlockN', 3), ('BlockType', 'F'), ('InstrText_File', 'Instr_F.JPG')]),
      OrderedDict([('BlockN', 4), ('BlockType', 'N'), ('InstrText_File', 'Instr_N.JPG')]),
      OrderedDict([('BlockN', 5), ('BlockType', 'F'), ('InstrText_File', 'Instr_F.JPG')]),
      OrderedDict([('BlockN', 6), ('BlockType', 'N'), ('InstrText_File', 'Instr_N.JPG')])]
    Routine Instr
    LoopInitiator Trials loopType="TrialHandler"
      Selected rows = $str(thisLoop)+":"+str(thisLoop+20)
      conditionsFile = Trials_StimPres_even.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('BlockN', 1), ('BlockType', 'F'), ('Cue', '80%'), ('Stimuli', 'F08'), ('StimImageFile', 'F08.jpg'), ('StimEmo', 1), ('CorrResp', 'left'), ('Mask', 'Mask1'), ('MaskImageFile', 'Mask1.jpg'), ('InstrText_File', 'Instr_F.JPG')]),
        OrderedDict([('BlockN', 1), ('BlockType', 'F'), ('Cue', '50%'), ('Stimuli', 'N03'), ('StimImageFile', 'N03.jpg'), ('StimEmo', 2), ('CorrResp', 'right'), ('Mask', 'Mask2'), ('MaskImageFile', 'Mask2.jpg'), ('InstrText_File', 'Instr_F.JPG')]),
        OrderedDict([('BlockN', 1), ('BlockType', 'F'), ('Cue', '80%'), ('Stimuli', 'F06'), ('StimImageFile', 'F06.jpg'), ('StimEmo', 1), ('CorrResp', 'left'), ('Mask', 'Mask3'), ('MaskImageFile', 'Mask3.jpg'), ('InstrText_File', 'Instr_F.JPG')]),
        OrderedDict([('BlockN', 1), ('BlockType', 'F'), ('Cue', '50%'), ('Stimuli', 'F10'), ('StimImageFile', 'F10.jpg'), ('StimEmo', 1), ('CorrResp', 'left'), ('Mask', 'Mask4'), ('MaskImageFile', 'Mask4.jpg'), ('InstrText_File', 'Instr_F.JPG')]),
        OrderedDict([('BlockN', 1), ('BlockType', 'F'), ('Cue', '80%'), ('Stimuli', 'F09'), ('StimImageFile', 'F09.jpg'), ('StimEmo', 1), ('CorrResp', 'left'), ('Mask', 'Mask1'), ('MaskImageFile', 'Mask1.jpg'), ('InstrText_File', 'Instr_F.JPG')]),
        OrderedDict([('BlockN', 1), ('BlockType', 'F'), ('Cue', '50%'), ('Stimuli', 'N09'), ('StimImageFile', 'N09.jpg'), ('StimEmo', 2), ('CorrResp', 'right'), ('Mask', 'Mask2'), ('MaskImageFile', 'Mask2.jpg'), ('InstrText_File', 'Instr_F.JPG')])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
      Routine FixCross
      Routine Stim_Pres
      Routine Feedback
    LoopTerminator Trials
    Routine Feedback_EndBlock
    Routine Break
  LoopTerminator Blocks
  Routine ThankYou
